begin model
begin parameters
  N_Avogadro                                  6.0221407599999999e+23
  volume                                      9.9999999999999998e-13
  m_Da_EGF_p                                  6200
  RAFi_0                                      0
  MEKi_0                                      0
  EGF_0                                       0
  EGF_conv                                    6.02214085854916e+23
  bind_EGF_EGFR_kf                            10
  bind_EGF_EGFR_kD                            0.01
  bind_EGF_EGFR_phi                           1
  bind_EGFR_EGFR_kf                           10
  bind_EGFR_EGFR_kD                           100
  bind_EGFR_EGFR_phi                          1
  ep_EGFR_EGFR_mod_EGF_single_deltaG          0.001
  ep_EGFR_EGFR_mod_EGF_double_deltaG          0.001
  bind_EGFR_GRB2_kf                           10
  bind_EGFR_GRB2_kD                           0.01
  EGFR_eq                                     10000
  synthesize_ERKphosphop_EGFR_kdeg            10
  EGFR_crispr                                 1
  catalyze_GRB2_RTKSH2ANY_deg_kcat            10
  bind_GRB2_SOS1_kf                           10
  bind_GRB2_SOS1_kD                           0.01
  bind_GRB2_SOS1_phi                          1
  bind_SOS1_RAS_kf                            10
  bind_SOS1_RAS_kD                            0.01
  catalyze_SOS1_RAS_gtp_kcat                  0.01
  catalyze_NF1_RAS_gdp_kcatr                  100
  bind_RAF_RAF_kf                             10
  bind_RAF_RAF_kD                             0.01
  bind_RAF_RAF_phi                            1
  bind_RASstategtp_RAF_kf                     10
  bind_RASstategtp_RAF_kD                     0.01
  bind_RASstategtp_RAF_phi                    1
  ep_RAF_RAF_mod_RASstategtp_double_deltaG    1000
  bind_RAFi_RAF_kf                            10
  bind_RAFi_RAF_kD                            0.01
  bind_RAFi_RAF_phi                           1
  ep_RAF_RAF_mod_RAFi_single_deltaG           0.001
  ep_RAF_RAF_mod_RAFi_double_deltaG           1000
  bind_RAF_MEKphosphou_kf                     10
  bind_RAF_MEKphosphou_kD                     0.01
  bind_RAF_MEKphosphou_phi                    1
  catalyze_RAFrafiNone_MEK_p_kcat             10
  catalyze_PP2A_MEK_u_kcatr                   1
  bind_MEKi_MEK_kf                            10
  bind_MEKi_MEK_kD                            0.01
  bind_MEKi_MEK_phi                           1
  ep_MEKphosphop_MEKi_deltaG                  100
  bind_MEK_ERKphosphou_kf                     10
  bind_MEK_ERKphosphou_kD                     0.01
  catalyze_MEKmekiNone_phosphop_ERK_p_kcat    10
  SPRY_eq                                     10000
  synthesize_ERKphosphop_SPRY_kdeg            10
  synthesize_ERKphosphop_SPRY_ERK_gexpslope   1000
  bind_SPRY_GRB2_kf                           10
  bind_SPRY_GRB2_kD                           0.01
  catalyze_ERKphosphop_SOS1_pS1134_kbase      0
  catalyze_ERKphosphop_SOS1_pS1134_kcat       10
  catalyze_phosphatase_SOS1_uS1134_kcatr      1
  ep_SOS1S1134p_GRB2_deltaG                   100
  synthesize_ERKphosphop_EGFR_ERK_gexpslope   1000
  DUSP_eq                                     10000
  synthesize_ERKphosphop_DUSP_ERK_gexpslope   1000
  synthesize_ERKphosphop_DUSP_kdeg            10
  bind_DUSP_ERKphosphop_kf                    10
  bind_DUSP_ERKphosphop_kD                    0.01
  catalyze_DUSP_ERK_u_kcatr                   1
  BRAF_0                                      0
  CRAF_0                                      0
  RAS_0                                       0
  MEK_0                                       0
  ERK_0                                       0
  GRB2_0                                      0
  SOS1_0                                      0
  pMEK_IF_scale                               1
  pMEK_IF_offset                              0.10000000000000001
  pERK_IF_scale                               1
  pERK_IF_offset                              0.10000000000000001
  m_Da_EGF                                    m_Da_EGF_p
  initRAFi                                    RAFi_0
  initMEKi                                    MEKi_0
  initEGF                                     EGF_0*EGF_conv/(m_Da_EGF*N_Avogadro)
  bind_EGF_EGFR_kr                            bind_EGF_EGFR_kD*bind_EGF_EGFR_kf
  Gf_bind_EGF_EGFR                            ln(bind_EGF_EGFR_kD)
  Ea0_bind_EGF_EGFR                           -ln(bind_EGF_EGFR_kf) - bind_EGF_EGFR_phi*ln(bind_EGF_EGFR_kD)
  bind_EGFR_EGFR_kr                           bind_EGFR_EGFR_kD*bind_EGFR_EGFR_kf
  Gf_bind_EGFR_EGFR                           ln(bind_EGFR_EGFR_kD)
  Ea0_bind_EGFR_EGFR                          -ln(bind_EGFR_EGFR_kf) - bind_EGFR_EGFR_phi*ln(bind_EGFR_EGFR_kD)
  ep_EGFR_EGFR_mod_EGF_single_Gf              ln(ep_EGFR_EGFR_mod_EGF_single_deltaG)
  ep_EGFR_EGFR_mod_EGF_double_Gf              ln(ep_EGFR_EGFR_mod_EGF_double_deltaG) + ln(ep_EGFR_EGFR_mod_EGF_single_deltaG)
  bind_EGFR_GRB2_kr                           bind_EGFR_GRB2_kD*bind_EGFR_GRB2_kf
  synthesize_ERKphosphop_EGFR_ksyn            1000000.0*EGFR_crispr*EGFR_eq*synthesize_ERKphosphop_EGFR_kdeg/(N_Avogadro*volume)
  bind_GRB2_SOS1_kr                           bind_GRB2_SOS1_kD*bind_GRB2_SOS1_kf
  Gf_bind_GRB2_SOS1                           ln(bind_GRB2_SOS1_kD)
  Ea0_bind_GRB2_SOS1                          -ln(bind_GRB2_SOS1_kf) - bind_GRB2_SOS1_phi*ln(bind_GRB2_SOS1_kD)
  bind_SOS1_RAS_kr                            bind_SOS1_RAS_kD*bind_SOS1_RAS_kf
  catalyze_NF1_RAS_gdp_kcat                   catalyze_NF1_RAS_gdp_kcatr*catalyze_SOS1_RAS_gtp_kcat
  bind_BRAF_BRAF_kr                           bind_RAF_RAF_kD*bind_RAF_RAF_kf
  Gf_bind_BRAF_BRAF                           ln(bind_RAF_RAF_kD)
  Ea0_bind_BRAF_BRAF                          -ln(bind_RAF_RAF_kf) - bind_RAF_RAF_phi*ln(bind_RAF_RAF_kD)
  bind_BRAF_CRAF_kr                           bind_RAF_RAF_kD*bind_RAF_RAF_kf
  Gf_bind_BRAF_CRAF                           ln(bind_RAF_RAF_kD)
  Ea0_bind_BRAF_CRAF                          -ln(bind_RAF_RAF_kf) - bind_RAF_RAF_phi*ln(bind_RAF_RAF_kD)
  bind_CRAF_CRAF_kr                           bind_RAF_RAF_kD*bind_RAF_RAF_kf
  Gf_bind_CRAF_CRAF                           ln(bind_RAF_RAF_kD)
  Ea0_bind_CRAF_CRAF                          -ln(bind_RAF_RAF_kf) - bind_RAF_RAF_phi*ln(bind_RAF_RAF_kD)
  bind_RASstategtp_BRAF_kr                    bind_RASstategtp_RAF_kD*bind_RASstategtp_RAF_kf
  Gf_bind_RASstategtp_BRAF                    ln(bind_RASstategtp_RAF_kD)
  Ea0_bind_RASstategtp_BRAF                   -ln(bind_RASstategtp_RAF_kf) - bind_RASstategtp_RAF_phi*ln(bind_RASstategtp_RAF_kD)
  bind_RASstategtp_CRAF_kr                    bind_RASstategtp_RAF_kD*bind_RASstategtp_RAF_kf
  Gf_bind_RASstategtp_CRAF                    ln(bind_RASstategtp_RAF_kD)
  Ea0_bind_RASstategtp_CRAF                   -ln(bind_RASstategtp_RAF_kf) - bind_RASstategtp_RAF_phi*ln(bind_RASstategtp_RAF_kD)
  ep_RAF_RAF_mod_RASstategtp_double_Gf        ln(ep_RAF_RAF_mod_RASstategtp_double_deltaG)
  bind_BRAFi_RAF_kr                           bind_RAFi_RAF_kD*bind_RAFi_RAF_kf
  Gf_bind_BRAFi_RAF                           ln(bind_RAFi_RAF_kD)
  Ea0_bind_BRAFi_RAF                          -ln(bind_RAFi_RAF_kf) - bind_RAFi_RAF_phi*ln(bind_RAFi_RAF_kD)
  bind_CRAFi_RAF_kr                           bind_RAFi_RAF_kD*bind_RAFi_RAF_kf
  Gf_bind_CRAFi_RAF                           ln(bind_RAFi_RAF_kD)
  Ea0_bind_CRAFi_RAF                          -ln(bind_RAFi_RAF_kf) - bind_RAFi_RAF_phi*ln(bind_RAFi_RAF_kD)
  ep_RAF_RAF_mod_RAFi_single_Gf               ln(ep_RAF_RAF_mod_RAFi_single_deltaG)
  ep_RAF_RAF_mod_RAFi_double_Gf               ln(ep_RAF_RAF_mod_RAFi_double_deltaG) + ln(ep_RAF_RAF_mod_RAFi_single_deltaG)
  bind_BRAF_MEKphosphou_kr                    bind_RAF_MEKphosphou_kD*bind_RAF_MEKphosphou_kf
  Gf_bind_BRAF_MEKphosphou                    ln(bind_RAF_MEKphosphou_kD)
  Ea0_bind_BRAF_MEKphosphou                   -ln(bind_RAF_MEKphosphou_kf) - bind_RAF_MEKphosphou_phi*ln(bind_RAF_MEKphosphou_kD)
  bind_CRAF_MEKphosphou_kr                    bind_RAF_MEKphosphou_kD*bind_RAF_MEKphosphou_kf
  Gf_bind_CRAF_MEKphosphou                    ln(bind_RAF_MEKphosphou_kD)
  Ea0_bind_CRAF_MEKphosphou                   -ln(bind_RAF_MEKphosphou_kf) - bind_RAF_MEKphosphou_phi*ln(bind_RAF_MEKphosphou_kD)
  catalyze_PP2A_MEK_u_kcat                    catalyze_PP2A_MEK_u_kcatr*catalyze_RAFrafiNone_MEK_p_kcat
  bind_MEKi_MEK_kr                            bind_MEKi_MEK_kD*bind_MEKi_MEK_kf
  Gf_bind_MEKi_MEK                            ln(bind_MEKi_MEK_kD)
  Ea0_bind_MEKi_MEK                           -ln(bind_MEKi_MEK_kf) - bind_MEKi_MEK_phi*ln(bind_MEKi_MEK_kD)
  ep_MEKphosphop_MEKi_Gf                      ln(ep_MEKphosphop_MEKi_deltaG)
  bind_MEK_ERKphosphou_kr                     bind_MEK_ERKphosphou_kD*bind_MEK_ERKphosphou_kf
  synthesize_ERKphosphop_SPRY_ksyn            1000000.0*SPRY_eq*synthesize_ERKphosphop_SPRY_kdeg/(N_Avogadro*volume)
  synthesize_ERKphosphop_SPRY_kmodslope       synthesize_ERKphosphop_SPRY_ERK_gexpslope*synthesize_ERKphosphop_SPRY_kdeg
  bind_SPRY_GRB2_kr                           bind_SPRY_GRB2_kD*bind_SPRY_GRB2_kf
  catalyze_phosphatase_SOS1_uS1134_kcat       catalyze_ERKphosphop_SOS1_pS1134_kcat*catalyze_phosphatase_SOS1_uS1134_kcatr
  ep_SOS1S1134p_GRB2_Gf                       ln(ep_SOS1S1134p_GRB2_deltaG)
  synthesize_ERKphosphop_EGFR_kmodslope       synthesize_ERKphosphop_EGFR_ERK_gexpslope*synthesize_ERKphosphop_EGFR_kdeg
  synthesize_ERKphosphop_DUSP_ksyn            1000000.0*DUSP_eq*synthesize_ERKphosphop_DUSP_kdeg/(N_Avogadro*volume)
  synthesize_ERKphosphop_DUSP_kmodslope       synthesize_ERKphosphop_DUSP_ERK_gexpslope*synthesize_ERKphosphop_DUSP_kdeg
  bind_DUSP_ERKphosphop_kr                    bind_DUSP_ERKphosphop_kD*bind_DUSP_ERKphosphop_kf
  catalyze_DUSP_ERK_u_kcat                    catalyze_DUSP_ERK_u_kcatr*catalyze_MEKmekiNone_phosphop_ERK_p_kcat
  initBRAF                                    1000000.0*BRAF_0/(N_Avogadro*volume)
  initCRAF                                    1000000.0*CRAF_0/(N_Avogadro*volume)
  initRAS                                     1000000.0*RAS_0/(N_Avogadro*volume)
  initMEK                                     1000000.0*MEK_0/(N_Avogadro*volume)
  initERK                                     1000000.0*ERK_0/(N_Avogadro*volume)
  initGRB2                                    1000000.0*GRB2_0/(N_Avogadro*volume)
  initSOS1                                    1000000.0*SOS1_0/(N_Avogadro*volume)
end parameters

begin molecule types
  RAFi(raf)
  MEKi(mek)
  EGF(rtk)
  EGFR(SH2,rtk,rtkf)
  GRB2(SH2,SH3)
  SOS1(S1134~p~u,SH3,ras)
  RAS(raf,sos1,state~gdp~gtp)
  BRAF(AA600~E,RBD,mek,raf,rafi)
  CRAF(RBD,mek,raf,rafi)
  MEK(Dsite,meki,phospho~p~u,raf)
  ERK(CD,phospho~p~u)
  DUSP(erk)
  SPRY(SH3)
end molecule types

begin observables
  Molecules tBRAF                      BRAF()
  Molecules tCRAF                      CRAF()
  Molecules tRAS                       RAS()
  Molecules tMEK                       MEK()
  Molecules tERK                       ERK()
  Molecules tDUSP                      DUSP()
  Molecules tEGFR                      EGFR()
  Molecules tGRB2                      GRB2()
  Molecules tSPRY                      SPRY()
  Molecules tSOS1                      SOS1()
  Molecules pERK                       ERK(phospho~p)
  Molecules pS1134SOS1                 SOS1(S1134~p)
  Molecules pMEK                       MEK(phospho~p)
  Molecules tEGF                       EGF()
  Molecules SOS1_active                GRB2(SH2!+,SH3!1).SOS1(SH3!1)
  Molecules SOS1_signaling_competent   GRB2(SH3!1).SOS1(SH3!1)
  Molecules GRB2_bound_by_SPRY         GRB2(SH3!1).SPRY(SH3!1)
  Molecules uS1134SOS1                 SOS1(S1134~u)
  Molecules RAS_gtp                    RAS(state~gtp)
  Molecules RAS_gdp                    RAS(state~gdp)
  Molecules active_RAF_monomers        BRAF(AA600~E,raf,rafi) BRAF(AA600~E,RBD,raf!+,rafi) BRAF(AA600~E,RBD!+,raf!2,rafi).BRAF(RBD,raf!2) BRAF(AA600~E,RBD!+,raf!2,rafi).CRAF(RBD,raf!2)
  Molecules inhibited_RAF_monomers     BRAF(AA600~E,raf,rafi!+) BRAF(AA600~E,RBD,raf!+,rafi!+) BRAF(AA600~E,RBD!+,raf!2,rafi!+).BRAF(RBD,raf!2) BRAF(AA600~E,RBD!+,raf!2,rafi!+).CRAF(RBD,raf!2)
  Molecules active_RAF_dimers          BRAF(RBD!+,raf!1,rafi).BRAF(RBD!+,raf!1) BRAF(RBD!+,raf!1,rafi).CRAF(RBD!+,raf!1) CRAF(RBD!+,raf!1,rafi).BRAF(RBD!+,raf!1) CRAF(RBD!+,raf!1,rafi).CRAF(RBD!+,raf!1)
  Molecules inhibited_RAF_dimers       BRAF(RBD!+,raf!1,rafi!+).BRAF(RBD!+,raf!1) BRAF(RBD!+,raf!1,rafi!+).CRAF(RBD!+,raf!1) CRAF(RBD!+,raf!1,rafi!+).BRAF(RBD!+,raf!1) CRAF(RBD!+,raf!1,rafi!+).CRAF(RBD!+,raf!1)
  Molecules active_pMEK                MEK(meki,phospho~p)
  Molecules inhibited_pMEK             MEK(meki!+,phospho~p)
  Molecules uMEK                       MEK(phospho~u)
  Molecules uERK                       ERK(phospho~u)
  Molecules tRAFi                      RAFi()
  Molecules tMEKi                      MEKi()
end observables

begin functions
  tBRAF_obs()        1.0e-6*tBRAF*N_Avogadro*volume
  tCRAF_obs()        1.0e-6*tCRAF*N_Avogadro*volume
  tRAS_obs()         1.0e-6*tRAS*N_Avogadro*volume
  tMEK_obs()         1.0e-6*tMEK*N_Avogadro*volume
  tDUSP_obs()        1.0e-6*tDUSP*N_Avogadro*volume
  tEGFR_obs()        1.0e-6*tEGFR*N_Avogadro*volume
  tGRB2_obs()        1.0e-6*tGRB2*N_Avogadro*volume
  tSPRY_obs()        1.0e-6*tSPRY*N_Avogadro*volume
  tSOS1_obs()        1.0e-6*tSOS1*N_Avogadro*volume
  tERK_obs()         1.0e-6*tERK*N_Avogadro*volume
  pERK_obs()         pERK/tERK
  pS1134SOS1_obs()   pS1134SOS1/tSOS1
  pMEK_obs()         pMEK/tMEK
  pMEK_IF_obs()      pMEK_obs*pMEK_IF_scale + pMEK_IF_offset
  pERK_IF_obs()      pERK_obs*pERK_IF_scale + pERK_IF_offset
end functions

begin species
  $RAFi(raf)                       initRAFi
  $MEKi(mek)                       initMEKi
  $EGF(rtk)                        initEGF
  BRAF(AA600~E,RBD,mek,raf,rafi)   initBRAF
  CRAF(RBD,mek,raf,rafi)           initCRAF
  RAS(raf,sos1,state~gdp)          initRAS
  MEK(Dsite,meki,phospho~u,raf)    initMEK
  ERK(CD,phospho~u)                initERK
  GRB2(SH2,SH3)                    initGRB2
  SOS1(S1134~u,SH3,ras)            initSOS1
end species

begin energy patterns
  ep_bind_EGF_EGFR:             EGF(rtk!1).EGFR(rtkf!1)    ln(bind_EGF_EGFR_kD)
  ep_bind_EGFR_EGFR:            EGFR(rtk!1).EGFR(rtk!1)    ln(bind_EGFR_EGFR_kD)
  ep_EGFR_EGFR_mod_EGF_single:  EGF(rtk!2).EGFR(rtk!1,rtkf!2).EGFR(rtk!1,rtkf)    ln(ep_EGFR_EGFR_mod_EGF_single_deltaG)
  ep_EGFR_EGFR_mod_EGF_double:  EGF(rtk!2).EGF(rtk!3).EGFR(rtk!1,rtkf!2).EGFR(rtk!1,rtkf!3)    ln(ep_EGFR_EGFR_mod_EGF_double_deltaG) + ln(ep_EGFR_EGFR_mod_EGF_single_deltaG)
  ep_bind_GRB2_SOS1:            GRB2(SH3!1).SOS1(SH3!1)    ln(bind_GRB2_SOS1_kD)
  ep_bind_BRAF_BRAF:            BRAF(raf!1).BRAF(raf!1)    ln(bind_RAF_RAF_kD)
  ep_bind_BRAF_CRAF:            BRAF(raf!1).CRAF(raf!1)    ln(bind_RAF_RAF_kD)
  ep_bind_CRAF_CRAF:            CRAF(raf!1).CRAF(raf!1)    ln(bind_RAF_RAF_kD)
  ep_bind_RASstategtp_BRAF:     BRAF(RBD!1).RAS(raf!1,state~gtp)    ln(bind_RASstategtp_RAF_kD)
  ep_bind_RASstategtp_CRAF:     CRAF(RBD!1).RAS(raf!1,state~gtp)    ln(bind_RASstategtp_RAF_kD)
  ep_BRAF_BRAF_mod_RAS_double:  BRAF(RBD!2,raf!1).BRAF(RBD!3,raf!1).RAS(raf!2,state~gtp).RAS(raf!3,state~gtp)    ln(ep_RAF_RAF_mod_RASstategtp_double_deltaG)
  ep_BRAF_CRAF_mod_RAS_double:  BRAF(RBD!2,raf!1).CRAF(RBD!3,raf!1).RAS(raf!2,state~gtp).RAS(raf!3,state~gtp)    ln(ep_RAF_RAF_mod_RASstategtp_double_deltaG)
  ep_CRAF_CRAF_mod_RAS_double:  CRAF(RBD!2,raf!1).CRAF(RBD!3,raf!1).RAS(raf!2,state~gtp).RAS(raf!3,state~gtp)    ln(ep_RAF_RAF_mod_RASstategtp_double_deltaG)
  ep_bind_BRAFi_RAF:            BRAF(rafi!1).RAFi(raf!1)    ln(bind_RAFi_RAF_kD)
  ep_bind_CRAFi_RAF:            CRAF(rafi!1).RAFi(raf!1)    ln(bind_RAFi_RAF_kD)
  ep_BRAF_BRAF_mod_RAFi_single:  BRAF(raf!1,rafi!2).BRAF(raf!1,rafi).RAFi(raf!2)    ln(ep_RAF_RAF_mod_RAFi_single_deltaG)
  ep_BRAF_CRAF_mod_RAFi_single:  BRAF(raf!1,rafi).CRAF(raf!1,rafi!2).RAFi(raf!2)    ln(ep_RAF_RAF_mod_RAFi_single_deltaG)
  ep_CRAF_BRAF_mod_RAFi_single:  BRAF(raf!1,rafi!2).CRAF(raf!1,rafi).RAFi(raf!2)    ln(ep_RAF_RAF_mod_RAFi_single_deltaG)
  ep_CRAF_CRAF_mod_RAFi_single:  CRAF(raf!1,rafi!2).CRAF(raf!1,rafi).RAFi(raf!2)    ln(ep_RAF_RAF_mod_RAFi_single_deltaG)
  ep_BRAF_BRAF_mod_RAFi_double:  BRAF(raf!1,rafi!2).BRAF(raf!1,rafi!3).RAFi(raf!2).RAFi(raf!3)    ln(ep_RAF_RAF_mod_RAFi_double_deltaG) + ln(ep_RAF_RAF_mod_RAFi_single_deltaG)
  ep_BRAF_CRAF_mod_RAFi_double:  BRAF(raf!1,rafi!2).CRAF(raf!1,rafi!3).RAFi(raf!2).RAFi(raf!3)    ln(ep_RAF_RAF_mod_RAFi_double_deltaG) + ln(ep_RAF_RAF_mod_RAFi_single_deltaG)
  ep_CRAF_CRAF_mod_RAFi_double:  CRAF(raf!1,rafi!2).CRAF(raf!1,rafi!3).RAFi(raf!2).RAFi(raf!3)    ln(ep_RAF_RAF_mod_RAFi_double_deltaG) + ln(ep_RAF_RAF_mod_RAFi_single_deltaG)
  ep_bind_BRAF_MEKphosphou:     BRAF(mek!1).MEK(phospho~u,raf!1)    ln(bind_RAF_MEKphosphou_kD)
  ep_bind_CRAF_MEKphosphou:     CRAF(mek!1).MEK(phospho~u,raf!1)    ln(bind_RAF_MEKphosphou_kD)
  ep_bind_MEKi_MEK:             MEK(meki!1).MEKi(mek!1)    ln(bind_MEKi_MEK_kD)
  ep_MEKphosphop_MEKi_single:   MEK(meki!1,phospho~p).MEKi(mek!1)    ln(ep_MEKphosphop_MEKi_deltaG)
  ep_SOS1S1134p_GRB2_single:    GRB2(SH3!1).SOS1(S1134~p,SH3!1)    ln(ep_SOS1S1134p_GRB2_deltaG)
end energy patterns

begin reaction rules
  EGF_and_EGFR_bind_and_dissociate:          EGF(rtk) + EGFR(rtkf) <-> EGF(rtk!1).EGFR(rtkf!1)    Arrhenius(bind_EGF_EGFR_phi, Ea0_bind_EGF_EGFR)
  EGFR_and_EGFR_bind_and_dissociate:         EGFR(rtk) + EGFR(rtk) <-> EGFR(rtk!1).EGFR(rtk!1)    Arrhenius(bind_EGFR_EGFR_phi, Ea0_bind_EGFR_EGFR)
  transactivated_EGFR_dimers_bind_GRB2:      EGFR(SH2,rtk!1).EGFR(rtk!1,rtkf!+) + GRB2(SH2) -> EGFR(SH2!2,rtk!1).EGFR(rtk!1,rtkf!+).GRB2(SH2!2)    bind_EGFR_GRB2_kf
  GRB2_dissociates_from_EGFR:                EGFR(SH2!1).GRB2(SH2!1) -> EGFR(SH2) + GRB2(SH2)    bind_EGFR_GRB2_kr()
  basal_synthesis_EGFR:                      0 -> EGFR(SH2,rtk,rtkf)    synthesize_ERKphosphop_EGFR_ksyn()
  basal_degradation_EGFR:                    EGFR() -> 0    synthesize_ERKphosphop_EGFR_kdeg DeleteMolecules
  GRB2_degrades_activeRTK_dimers:            EGFR(SH2!+,rtk!1).EGFR(SH2,rtk!1) -> 0    catalyze_GRB2_RTKSH2ANY_deg_kcat DeleteMolecules
  GRB2_degrades_doubleactiveRTK_dimers:      EGFR(SH2!+,rtk!1).EGFR(SH2!+,rtk!1) -> 0    catalyze_GRB2_RTKSH2ANY_deg_kcat DeleteMolecules
  GRB2_degrades_activeRTK_monomers:          EGFR(SH2!+,rtk) -> 0    catalyze_GRB2_RTKSH2ANY_deg_kcat DeleteMolecules
  GRB2_and_SOS1_bind_and_dissociate:         GRB2(SH3) + SOS1(SH3) <-> GRB2(SH3!1).SOS1(SH3!1)    Arrhenius(bind_GRB2_SOS1_phi, Ea0_bind_GRB2_SOS1)
  RTK_and_GRB2_bound_SOS1_binds_RASgdp:      GRB2(SH2!+,SH3!1).SOS1(SH3!1,ras) + RAS(sos1,state~gdp) -> GRB2(SH2!+,SH3!1).RAS(sos1!2,state~gdp).SOS1(SH3!1,ras!2)    bind_SOS1_RAS_kf
  SOS1_dissociates_from_RAS:                 RAS(sos1!1).SOS1(ras!1) -> SOS1(ras) + RAS(sos1)    bind_SOS1_RAS_kr()
  SOS1_catalyzes_RAS_guanosine_exchange:     RAS(sos1!1,state~gdp).SOS1(ras!1) -> SOS1(ras) + RAS(sos1,state~gtp)    catalyze_SOS1_RAS_gtp_kcat
  RAS_hydrolisis_GTP:                        RAS(raf,state~gtp) -> RAS(raf,state~gdp)    catalyze_NF1_RAS_gdp_kcat()
  BRAF_and_BRAF_bind_and_dissociate:         BRAF(raf) + BRAF(raf) <-> BRAF(raf!1).BRAF(raf!1)    Arrhenius(bind_RAF_RAF_phi, Ea0_bind_BRAF_BRAF)
  BRAF_and_CRAF_bind_and_dissociate:         BRAF(raf) + CRAF(raf) <-> BRAF(raf!1).CRAF(raf!1)    Arrhenius(bind_RAF_RAF_phi, Ea0_bind_BRAF_CRAF)
  CRAF_and_CRAF_bind_and_dissociate:         CRAF(raf) + CRAF(raf) <-> CRAF(raf!1).CRAF(raf!1)    Arrhenius(bind_RAF_RAF_phi, Ea0_bind_CRAF_CRAF)
  RASgtp_and_BRAF_bind_and_dissociate:       RAS(raf,state~gtp) + BRAF(RBD) <-> BRAF(RBD!1).RAS(raf!1,state~gtp)    Arrhenius(bind_RASstategtp_RAF_phi, Ea0_bind_RASstategtp_BRAF)
  RASgtp_and_CRAF_bind_and_dissociate:       RAS(raf,state~gtp) + CRAF(RBD) <-> CRAF(RBD!1).RAS(raf!1,state~gtp)    Arrhenius(bind_RASstategtp_RAF_phi, Ea0_bind_RASstategtp_CRAF)
  GTP_hydrolysis_dissociates_BRAF_from_RAS:  BRAF(RBD!1).RAS(raf!1,state~gtp) -> RAS(raf,state~gdp) + BRAF(RBD)    catalyze_NF1_RAS_gdp_kcat()
  GTP_hydrolysis_dissociates_CRAF_from_RAS:  CRAF(RBD!1).RAS(raf!1,state~gtp) -> RAS(raf,state~gdp) + CRAF(RBD)    catalyze_NF1_RAS_gdp_kcat()
  RAFi_and_BRAF_bind_and_dissociate:         RAFi(raf) + BRAF(rafi) <-> BRAF(rafi!1).RAFi(raf!1)    Arrhenius(bind_RAFi_RAF_phi, Ea0_bind_BRAFi_RAF)
  RAFi_and_CRAF_bind_and_dissociate:         RAFi(raf) + CRAF(rafi) <-> CRAF(rafi!1).RAFi(raf!1)    Arrhenius(bind_RAFi_RAF_phi, Ea0_bind_CRAFi_RAF)
  BRAF_and_uMEK_bind_and_dissociate:         BRAF(mek) + MEK(phospho~u,raf) <-> BRAF(mek!1).MEK(phospho~u,raf!1)    Arrhenius(bind_RAF_MEKphosphou_phi, Ea0_bind_BRAF_MEKphosphou)
  CRAF_and_uMEK_bind_and_dissociate:         CRAF(mek) + MEK(phospho~u,raf) <-> CRAF(mek!1).MEK(phospho~u,raf!1)    Arrhenius(bind_RAF_MEKphosphou_phi, Ea0_bind_CRAF_MEKphosphou)
  BRAF_BRAF_phosphorylates_MEK:              BRAF(RBD!+,mek!1,raf!2,rafi).BRAF(RBD!+,raf!2).MEK(phospho~u,raf!1) -> MEK(phospho~p,raf) + BRAF(RBD!+,mek,raf!2,rafi).BRAF(RBD!+,raf!2)    catalyze_RAFrafiNone_MEK_p_kcat
  BRAF_CRAF_phosphorylates_MEK:              BRAF(RBD!+,mek!1,raf!2,rafi).CRAF(RBD!+,raf!2).MEK(phospho~u,raf!1) -> MEK(phospho~p,raf) + BRAF(RBD!+,mek,raf!2,rafi).CRAF(RBD!+,raf!2)    catalyze_RAFrafiNone_MEK_p_kcat
  CRAF_BRAF_phosphorylates_MEK:              BRAF(RBD!+,raf!2).CRAF(RBD!+,mek!1,raf!2,rafi).MEK(phospho~u,raf!1) -> MEK(phospho~p,raf) + BRAF(RBD!+,raf!2).CRAF(RBD!+,mek,raf!2,rafi)    catalyze_RAFrafiNone_MEK_p_kcat
  CRAF_CRAF_phosphorylates_MEK:              CRAF(RBD!+,mek!1,raf!2,rafi).CRAF(RBD!+,raf!2).MEK(phospho~u,raf!1) -> MEK(phospho~p,raf) + CRAF(RBD!+,mek,raf!2,rafi).CRAF(RBD!+,raf!2)    catalyze_RAFrafiNone_MEK_p_kcat
  BRAFV600E_phosphorylates_MEK_1:            BRAF(AA600~E,mek!1,raf,rafi).MEK(meki,phospho~u,raf!1) -> MEK(meki,phospho~p,raf) + BRAF(AA600~E,mek,raf,rafi)    catalyze_RAFrafiNone_MEK_p_kcat
  BRAFV600E_phosphorylates_MEK_2:            BRAF(AA600~E,RBD,mek!1,raf!+,rafi).MEK(meki,phospho~u,raf!1) -> MEK(meki,phospho~p,raf) + BRAF(AA600~E,RBD,mek,raf!+,rafi)    catalyze_RAFrafiNone_MEK_p_kcat
  BRAFV600E_phosphorylates_MEK_3:            BRAF(AA600~E,RBD!+,mek!1,raf!2,rafi).BRAF(RBD,raf!2).MEK(meki,phospho~u,raf!1) -> MEK(meki,phospho~p,raf) + BRAF(AA600~E,RBD!+,mek,raf!2,rafi).BRAF(RBD,raf!2)    catalyze_RAFrafiNone_MEK_p_kcat
  BRAFV600E_phosphorylates_MEK_4:            BRAF(AA600~E,RBD!+,mek!1,raf!2,rafi).CRAF(RBD,raf!2).MEK(meki,phospho~u,raf!1) -> MEK(meki,phospho~p,raf) + BRAF(AA600~E,RBD!+,mek,raf!2,rafi).CRAF(RBD,raf!2)    catalyze_RAFrafiNone_MEK_p_kcat
  MEK_is_dephosphorylated:                   MEK(phospho~p) -> MEK(phospho~u)    catalyze_PP2A_MEK_u_kcat()
  MEKi_and_MEK_bind_and_dissociate:          MEKi(mek) + MEK(meki) <-> MEK(meki!1).MEKi(mek!1)    Arrhenius(bind_MEKi_MEK_phi, Ea0_bind_MEKi_MEK)
  MEK_binds_uERK:                            MEK(Dsite) + ERK(CD,phospho~u) -> ERK(CD!1,phospho~u).MEK(Dsite!1)    bind_MEK_ERKphosphou_kf
  MEK_dissociates_from_ERK:                  ERK(CD!1).MEK(Dsite!1) -> MEK(Dsite) + ERK(CD)    bind_MEK_ERKphosphou_kr()
  pMEK_phosphorylates_ERK:                   ERK(CD!1,phospho~u).MEK(Dsite!1,meki,phospho~p) -> ERK(CD,phospho~p) + MEK(Dsite,meki,phospho~p)    catalyze_MEKmekiNone_phosphop_ERK_p_kcat
  basal_synthesis_SPRY:                      0 -> SPRY(SH3)    synthesize_ERKphosphop_SPRY_ksyn()
  basal_degradation_SPRY:                    SPRY() -> 0    synthesize_ERKphosphop_SPRY_kdeg DeleteMolecules
  ERK_synthesizes_SPRY:                      0 + ERK(phospho~p) -> SPRY(SH3) + ERK(phospho~p)    synthesize_ERKphosphop_SPRY_kmodslope()
  SPRY_binds_GRB2:                           SPRY(SH3) + GRB2(SH3) -> GRB2(SH3!1).SPRY(SH3!1)    bind_SPRY_GRB2_kf
  SPRY_dissociates_from_GRB2:                GRB2(SH3!1).SPRY(SH3!1) -> SPRY(SH3) + GRB2(SH3)    bind_SPRY_GRB2_kr()
  SOS1_is_phosphorylated:                    SOS1(S1134~u) -> SOS1(S1134~p)    catalyze_ERKphosphop_SOS1_pS1134_kbase
  SOS1_is_dephosphorylated:                  SOS1(S1134~p) -> SOS1(S1134~u)    catalyze_phosphatase_SOS1_uS1134_kcat()
  pERK_phosphorylates_SOS1:                  ERK(phospho~p) + SOS1(S1134~u) -> ERK(phospho~p) + SOS1(S1134~p)    catalyze_ERKphosphop_SOS1_pS1134_kcat
  ERK_synthesizes_EGFR:                      0 + ERK(phospho~p) -> EGFR(SH2,rtk,rtkf) + ERK(phospho~p)    synthesize_ERKphosphop_EGFR_kmodslope()
  basal_synthesis_DUSP:                      0 -> DUSP(erk)    synthesize_ERKphosphop_DUSP_ksyn()
  basal_degradation_DUSP:                    DUSP() -> 0    synthesize_ERKphosphop_DUSP_kdeg DeleteMolecules
  ERK_synthesizes_DUSP:                      0 + ERK(phospho~p) -> DUSP(erk) + ERK(phospho~p)    synthesize_ERKphosphop_DUSP_kmodslope()
  DUSP_binds_pERK:                           DUSP(erk) + ERK(CD,phospho~p) -> DUSP(erk!1).ERK(CD!1,phospho~p)    bind_DUSP_ERKphosphop_kf
  DUSP_dissociates_from_ERK:                 DUSP(erk!1).ERK(CD!1) -> DUSP(erk) + ERK(CD)    bind_DUSP_ERKphosphop_kr()
  DUSP_dephosphorylates_ERK:                 DUSP(erk!1).ERK(CD!1,phospho~p) -> ERK(CD,phospho~u) + DUSP(erk)    catalyze_DUSP_ERK_u_kcat()
end reaction rules

end model
